PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save wide csv file = False
  expName = visualEVENTS
  logging level = data
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine block7
    CodeComponent code_20
      Begin Routine:
        #M3N06

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(1 * math.pi),numframes)
        count = 0
        motion = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 6:
            if count>=(numframes):
                count = 0
                motion = 0
            x=framesArray[count]
            if ((.4 * math.tan(x)) + minimum) > maximum: # CHANGE DIRECTIONS
                count = 0
                cycle += 1
                if motion == 0:
                    motion = 1
                    squarepos = maximum
                else:
                    motion = 0
                    squarepos = minimum
            elif motion == 1: # MOVING LEFT
                squarepos = maximum - (.4 * math.tan(x))
            else: #motion == 0 MOVING RIGHT
                squarepos = minimum + (.4 * math.tan(x))
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_21
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M3 \t')
            f.write('6 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_22
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='How many times? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write(captured_string) #write the string they typed
            f.write('\n') # write a line ending
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                  #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt', 'space', 'period', 'comma', 'apostrophe', 'slash', 'semicolon', 'bracketleft', 'bracketright', 'minus', 'grave', 'equal', 'tab', 'capslock', 'alt', 'control', 'backlash', 'q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'z', 'x', 'c', 'v', 'b', 'n', 'm']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
  Routine block6
    CodeComponent code_17
      Begin Routine:
        #M2N18

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(1 * math.pi),numframes)
        count = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 18:
            x=framesArray[count]
            if minimum <= (.4 * math.tan(x)) + minimum < maximum:
                squarepos = minimum + (.4 * math.tan(x))
            elif minimum < (minimum + ( math.tan(x) ** (-1))) <= maximum:
                squarepos = minimum + ( math.tan(x) ** (-1))
            else:
                count = 0
                cycle += 2
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_18
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M2 \t')
            f.write('18 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_19
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='How many times? Please use the number keys at the top of the keyboard. Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write(captured_string) #write the string they typed
            f.write('\n') # write a line ending
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                  #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt', 'space', 'period', 'comma', 'apostrophe', 'slash', 'semicolon', 'bracketleft', 'bracketright', 'minus', 'grave', 'equal', 'tab', 'capslock', 'alt', 'control', 'backlash', 'q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'z', 'x', 'c', 'v', 'b', 'n', 'm']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
  Routine block5
    CodeComponent code_14
      Begin Routine:
        #M2N10

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(1 * math.pi),numframes)
        count = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 10:
            x=framesArray[count]
            if minimum <= (.4 * math.tan(x)) + minimum < maximum:
                squarepos = minimum + (.4 * math.tan(x))
            elif minimum < (minimum + ( math.tan(x) ** (-1))) <= maximum:
                squarepos = minimum + ( math.tan(x) ** (-1))
            else:
                count = 0
                cycle += 2
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_15
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M2 \t')
            f.write('10 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_16
      Begin Routine:
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  Routine block4
    CodeComponent code_11
      Begin Routine:
        #M2N06

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(1 * math.pi),numframes)
        count = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 6:
            x=framesArray[count]
            if minimum <= (.4 * math.tan(x)) + minimum < maximum:
                squarepos = minimum + (.4 * math.tan(x))
            elif minimum < (minimum + ( math.tan(x) ** (-1))) <= maximum:
                squarepos = minimum + ( math.tan(x) ** (-1))
            else:
                count = 0
                cycle += 2
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_12
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M2 \t')
            f.write('6 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_13
      Begin Routine:
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  Routine block3
    CodeComponent code_5
      Begin Routine:
        #M1N18

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(2 * math.pi),numframes)
        count = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 18:
            if count>=(numframes):
                count = 0
                cycle += 2
            x=framesArray[count]
            if (minimum + .01*(int(count))) < maximum:
                squarepos = minimum + .01*(int(count))
            else:
                squarepos = maximum - .01*((int(count))-70)
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_9
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M1 \t')
            f.write('18 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_10
      Begin Routine:
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  Routine block2
    CodeComponent code_4
      Begin Routine:
        #M1N10

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(2 * math.pi),numframes)
        count = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 10:
            if count>=(numframes):
                count = 0
                cycle += 2
            x=framesArray[count]
            if (minimum + .01*(int(count))) < maximum:
                squarepos = minimum + .01*(int(count))
            else:
                squarepos = maximum - .01*((int(count))-70)
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_7
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M1 \t')
            f.write('10 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_8
      Begin Routine:
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  Routine block1
    CodeComponent code
      Begin Routine:
        #M1N06

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(2 * math.pi),numframes)
        count = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 6:
            if count>=(numframes):
                count = 0
                cycle += 2
            x=framesArray[count]
            if (minimum + .01*(int(count))) < maximum:
                squarepos = minimum + .01*(int(count))
            else:
                squarepos = maximum - .01*((int(count))-70)
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_2
      Begin Experiment:
        #setting up column headings
        outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
        f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
        f.write('subj \t')
        f.write('order \t')
        f.write('movement \t')
        f.write('nummoves \t')
        f.write('pauses \t')
        f.write('numpauses \t')
        f.write('PauseLocation \t')
        f.write('happenQ \t')
        f.write('numtimesQ \t')
        f.write('\n')
        f.close() #close and "save" the output file

        outfile = "./Data/visualEVENTS/Surveys/%s_%s_SurveyResponses.tsv" %(expInfo['participant'], expName)
        f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
        f.write('subj \t')
        f.write('Question number \t')
        f.write('Question \t')
        f.write('Response \t')
        f.write('\n')
        f.close() #close and "save" the output file

        order=0
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import locale_setup, gui, visual, core, data, event, logging, sound
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M1 \t')
            f.write('6 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_6
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='How many times? Please use the number keys at the top of the keyboard. Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write(captured_string) #write the string they typed
            f.write('\n') # write a line ending
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','ctrl','alt', 'space', 'period', 'comma', 'apostrophe', 'slash', 'semicolon', 'bracketleft', 'bracketright', 'minus', 'grave', 'equal', 'tab', 'capslock', 'lctrl','lalt','rctrl','ralt', 'backlash', 'q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'z', 'x', 'c', 'v', 'b', 'n', 'm']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
  Routine instr
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will be shown a series of very simple animations.
        Following each animation, you will be asked to answer two questions.

        The first question will be, simply: what happened in that animation?  You will be given space to type out your description.

        The second question will be, simply: "how many times did it happen?" You might think that this is a tricky question, but we're just interested in your first intuitions about numbers of events. Here you will enter a number using the keys at the top of the keyboard.

        As you move through the animations, you may notice that there are some differences between the animations. We ask that you not reference differences between the animations when describing a single animation.

        Please tell the experimenter if you have any questions. When the experimenter has left the room, press "return" to begin.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blockSelect
    CodeComponent code_3
      Begin Experiment:
        nRepsblock1=0
        nRepsblock2=0
        nRepsblock3=0
        nRepsblock4=0
        nRepsblock5=0
        nRepsblock6=0
        nRepsblock7=0
        nRepsblock8=0
        nRepsblock9=0

        #free response code from:https://groups.google.com/forum/#!topic/psychopy-users/oyQZFv3ZM_M
        #randomization code from:https://computingforpsychologists.wordpress.com/2013/11/12/how-to-hack-conditional-branching-in-the-psychopy-builder/
      Begin Routine:
        win = visual.Window(
            size=(1366, 768), fullscr=True, screen=0,
            allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[0,0,0], colorSpace='rgb',
            blendMode='avg', useFBO=True)
        # store frame rate of monitor if we can measure it
        expInfo['frameRate'] = win.getActualFrameRate()
        if expInfo['frameRate'] != None:
            frameDur = 1.0 / round(expInfo['frameRate'])
        else:
            frameDur = 1.0 / 60.0  # could not measure, so guess

        # Initialize components for Routine "trial" (fixation crosses)
        trialClock = core.Clock()
        text = visual.TextStim(win=win, name='text',
            text=u'+',
            font=u'Arial',
            pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=u'white', colorSpace='rgb', opacity=1,
            depth=0.0);

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        routineTimer.add(1.000000)
        # update component parameters for each repeat
        # keep track of which components have finished
        trialComponents = [text]
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine and routineTimer.getTime() > 0:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame

            # *text* updates
            if t >= 0.0 and text.status == NOT_STARTED:
                # keep track of start time/frame for later
                text.tStart = t
                text.frameNStart = frameN  # exact frame index
                text.setAutoDraw(True)
            frameRemains = 0.0 + 1.0- win.monitorFramePeriod * 0.75  # most of one frame period left
            if text.status == STARTED and t >= frameRemains:
                text.setAutoDraw(False)

            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # check for quit (the Esc key)
            if endExpNow or event.getKeys(keyList=["escape"]):
                core.quit()

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()


        if selectBlock==1:
         nRepsblock1=1
         nRepsblock2=0
         nRepsblock3=0
         nRepsblock4=0
         nRepsblock5=0
         nRepsblock6=0
         nRepsblock7=0
         nRepsblock8=0
         nRepsblock9=0
        elif selectBlock==2:
         nRepsblock1=0
         nRepsblock2=1
         nRepsblock3=0
         nRepsblock4=0
         nRepsblock5=0
         nRepsblock6=0
         nRepsblock7=0
         nRepsblock8=0
         nRepsblock9=0
        elif selectBlock==3:
         nRepsblock1=0
         nRepsblock2=0
         nRepsblock3=1
         nRepsblock4=0
         nRepsblock5=0
         nRepsblock6=0
         nRepsblock7=0
         nRepsblock8=0
         nRepsblock9=0
        elif selectBlock==4:
         nRepsblock1=0
         nRepsblock2=0
         nRepsblock3=0
         nRepsblock4=1
         nRepsblock5=0
         nRepsblock6=0
         nRepsblock7=0
         nRepsblock8=0
         nRepsblock9=0
        elif selectBlock==5:
         nRepsblock1=0
         nRepsblock2=0
         nRepsblock3=0
         nRepsblock4=0
         nRepsblock5=1
         nRepsblock6=0
         nRepsblock7=0
         nRepsblock8=0
         nRepsblock9=0
        elif selectBlock==6:
         nRepsblock1=0
         nRepsblock2=0
         nRepsblock3=0
         nRepsblock4=0
         nRepsblock5=0
         nRepsblock6=1
         nRepsblock7=0
         nRepsblock8=0
         nRepsblock9=0
        elif selectBlock==7:
         nRepsblock1=0
         nRepsblock2=0
         nRepsblock3=0
         nRepsblock4=0
         nRepsblock5=0
         nRepsblock6=0
         nRepsblock7=1
         nRepsblock8=0
         nRepsblock9=0
        elif selectBlock==8:
         nRepsblock1=0
         nRepsblock2=0
         nRepsblock3=0
         nRepsblock4=0
         nRepsblock5=0
         nRepsblock6=0
         nRepsblock7=0
         nRepsblock8=1
         nRepsblock9=0
        elif selectBlock==9:
         nRepsblock1=0
         nRepsblock2=0
         nRepsblock3=0
         nRepsblock4=0
         nRepsblock5=0
         nRepsblock6=0
         nRepsblock7=0
         nRepsblock8=0
         nRepsblock9=1
      End Experiment:
        #endscreen
        #i used the same code from the free response boxes, but got rid of all key responses except enter
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0), text='Thank you for your participation!\n\nPress return to take an optional survey.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        #nothing will actually show up for this one, participant just presses enter to advance
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.0), text='',
                                font=sans,
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

        #survey question 1
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What factors do you think influenced your answers to the "how many times" question? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/Surveys/%s_%s_SurveyResponses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('Question 1 \t')
            f.write('What factors do you think influenced your answers to the "how many times" question? \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.write('\n')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)

        #survey question 2
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What differences, if any, did you notice between the animations? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/Surveys/%s_%s_SurveyResponses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('Question 2 \t')
            f.write('What differences, if any, did you notice between the animations? \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.write('\n')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)

        #survey question 3
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='Did you find this task challenging? Why or why not? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/Surveys/%s_%s_SurveyResponses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('Question 3 \t')
            f.write('Did you find this task challenging? Why or why not? \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.write('\n')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)

        #survey question 4
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='Is there anything else you would like to tell us? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/Surveys/%s_%s_SurveyResponses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('Question 4 \t')
            f.write('Is there anything else you would like to tell us? \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.write('\n')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)

        #survey endscreen
        #i used the same code from the free response boxes, but got rid of all key responses except enter
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0), text='Thank you for taking the survey! \n\nPlease let the experimenter know that you are finished.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        #nothing will actually show up for this one, participant just presses enter to advance
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.0), text='',
                                font=sans,
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()
  Routine block9
    CodeComponent code_26
      Begin Routine:
        #M3N18

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(1 * math.pi),numframes)
        count = 0
        motion = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 18:
            if count>=(numframes):
                count = 0
                motion = 0
            x=framesArray[count]
            if ((.4 * math.tan(x)) + minimum) > maximum: # CHANGE DIRECTIONS
                count = 0
                cycle += 1
                if motion == 0:
                    motion = 1
                    squarepos = maximum
                else:
                    motion = 0
                    squarepos = minimum
            elif motion == 1: # MOVING LEFT
                squarepos = maximum - (.4 * math.tan(x))
            else: #motion == 0 MOVING RIGHT
                squarepos = minimum + (.4 * math.tan(x))
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_27
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M3 \t')
            f.write('18 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_28
      Begin Routine:
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  Routine block8
    CodeComponent code_23
      Begin Routine:
        #M3N10

        trialClock = core.Clock()
        from psychopy import visual,event,core
        import time
        import sys
        import random
        import csv
        import math
        from numpy import linspace

        win = visual.Window(size=(1366,768), fullscr = True, units = 'pix', monitor = 'testMonitor', color = [.4,.7,1],
            colorSpace = "rgb")

        square = visual.Rect(win, lineWidth=0, fillColor="red", size=[.2,.2], pos=[-.35,0], units="height")

        numframes = 140
        framesArray = linspace(0,(1 * math.pi),numframes)
        count = 0
        motion = 0
        cycle = 0
        minimum = -.35
        maximum = .35
        while not cycle == 10:
            if count>=(numframes):
                count = 0
                motion = 0
            x=framesArray[count]
            if ((.4 * math.tan(x)) + minimum) > maximum: # CHANGE DIRECTIONS
                count = 0
                cycle += 1
                if motion == 0:
                    motion = 1
                    squarepos = maximum
                else:
                    motion = 0
                    squarepos = minimum
            elif motion == 1: # MOVING LEFT
                squarepos = maximum - (.4 * math.tan(x))
            else: #motion == 0 MOVING RIGHT
                squarepos = minimum + (.4 * math.tan(x))
            square.setPos([squarepos, 0])
            square.draw()
            win.flip()
            count += 1

        order+=1
    CodeComponent code_24
      Begin Routine:
        #!/usr/bin/env python

        # SUPPLIED WITH NO GUARANTEES!!
        from psychopy import visual, core, event
        #my lazy way of keeping time NB can be relatively inaccurate
        import time
        trialClock = core.Clock()

        # set up a stimulus window
        win = visual.Window(size=(1366,768), fullscr=True,allowGUI=False,winType='pyglet',
                    monitor='testMonitor', units ='deg', screen=0)

        #set up some fonts. If a list is provided, the first font found will be used.
        sans = ['Gill Sans MT', 'Arial','Helvetica','Verdana']

        ResponseInstuction = visual.TextStim(win,
                                units='norm',height = 0.1,
                                pos=(0, 0.5), text='What happened? Start typing and press return to continue.',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='white')

        #will be used to show the text they are typing: will update every
        # time they type a letter
        CapturedResponseString = visual.TextStim(win,
                                units='norm',height = 0.07,
                                pos=(0, 0.0), text='',
                                font='Arial',
                                alignHoriz = 'center',alignVert='center',
                                color='black')

        captured_string = '' #empty for now.. this is a string of zero length that
                                         # we will append our key presses to in sequence

        #a routine to save responses to file anytime we want to
        def saveThisResponse(captured_string):
            outfile = "./Data/visualEVENTS/%s_%s_Responses.tsv" %(expInfo['participant'], expName)
            f = open(outfile, 'a') #open our results file in append mode so we don't overwrite anything
            f.write('%s \t' %expInfo['participant'])
            f.write('%s \t' %order)
            f.write('M3 \t')
            f.write('10 \t')
            f.write('0 \t')
            f.write('0 \t')
            f.write('na \t')
            f.write(captured_string) #write the string they typed
            f.write('\t')
            f.close() #close and "save" the output file


        #a routine to update the string on the screen as the participant types
        def updateTheResponse(captured_string):
            CapturedResponseString.setText(captured_string)
            CapturedResponseString.draw()
            ResponseInstuction.draw()
            win.flip()

        #setup done, now start doing stuff

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        t = 0
        trialClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        # update component parameters for each repeat

        # keep track of which components have finished
        trialComponents = []
        for thisComponent in trialComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "trial"-------
        while continueRoutine:
            # get current time
            t = trialClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame


            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished

            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()
            #now instruct the participnat to respond
            ResponseInstuction.draw()  # draw instruction
            win.flip() # show instruction

            # now we will keep tracking what's happening on the keyboard
            # until the participant hits the return key
            subject_response_finished = 0 # only changes when they hit return

            #check for Esc key / return key presses each frame
            while subject_response_finished == 0:
                for key in event.getKeys():
                    #quit at any point
                    if key in ['escape']:
                        win.close()
                        core.quit()

                    #if the participant hits return, save the string so far out
                    #and reset the string to zero length for the next trial
                    elif key in ['return']:
                        print 'participant typed %s' %captured_string #show in debug window
                        saveThisResponse(captured_string) #write to file
                        captured_string = '' #reset to zero length
                        subject_response_finished = 1 #allows the next trial to start

                    #allow the participant to do deletions too , using the
                    # delete key, and show the change they made
                    elif key in ['delete','backspace']:
                        captured_string = captured_string[:-1] #delete last character
                        updateTheResponse(captured_string)
                    #handle spaces
                    elif key in ['space']:
                        captured_string = captured_string+' '
                        updateTheResponse(captured_string)
                    elif key in ['period']:
                        captured_string = captured_string+'.'
                        updateTheResponse(captured_string)
                    elif key in ['comma']:
                        captured_string = captured_string+','
                        updateTheResponse(captured_string)
                    elif key in ['apostrophe']:
                        captured_string = captured_string+"'"
                        updateTheResponse(captured_string)
                    elif key in ['slash']:
                        captured_string = captured_string+'/'
                        updateTheResponse(captured_string)
                    elif key in ['semicolon']:
                        captured_string = captured_string+';'
                        updateTheResponse(captured_string)
                    elif key in ['bracketleft']:
                        captured_string = captured_string+'['
                        updateTheResponse(captured_string)
                    elif key in ['bracketright']:
                        captured_string = captured_string+']'
                        updateTheResponse(captured_string)
                    elif key in ['minus']:
                        captured_string = captured_string+'-'
                        updateTheResponse(captured_string)
                    elif key in ['grave']:
                        captured_string = captured_string+'`'
                        updateTheResponse(captured_string)
                    elif key in ['equal']:
                        captured_string = captured_string+'='
                        updateTheResponse(captured_string)
                    elif key in ['up','down','left','right','lshift','rshift','tab','capslock','lctrl','lalt','rctrl','ralt']:
                        pass #do nothing when some keys are pressed
                    #etc ...

        #if any other key is pressed, add it to the string and
                    # show the participant what they typed
                    else:
                        captured_string = captured_string+key
                        #show it
                        updateTheResponse(captured_string)
    CodeComponent code_25
      Begin Routine:
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Flow
  Routine instr
  LoopInitiator blockSelectLoop loopType="TrialHandler"
    conditionsFile = blockSelect.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'selectBlock': 9L},
      {u'selectBlock': 8L},
      {u'selectBlock': 7L},
      {u'selectBlock': 6L},
      {u'selectBlock': 5L},
      {u'selectBlock': 4L},
      {u'selectBlock': 3L},
      {u'selectBlock': 2L},
      {u'selectBlock': 1L}]
    Routine blockSelect
    LoopInitiator block1Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock1
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      Routine block1
    LoopTerminator block1Loop
    LoopInitiator block2Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock2
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      Routine block2
    LoopTerminator block2Loop
    LoopInitiator block3Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock3
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      Routine block3
    LoopTerminator block3Loop
    LoopInitiator block4Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock4
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      Routine block4
    LoopTerminator block4Loop
    LoopInitiator block5Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock5
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      Routine block5
    LoopTerminator block5Loop
    LoopInitiator block6Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock6
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      Routine block6
    LoopTerminator block6Loop
    LoopInitiator block7Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock7
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      Routine block7
    LoopTerminator block7Loop
    LoopInitiator block8Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock8
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      Routine block8
    LoopTerminator block8Loop
    LoopInitiator block9Loop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock9
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      Routine block9
    LoopTerminator block9Loop
  LoopTerminator blockSelectLoop
